PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = https://docs.google.com/forms/d/e/1FAIpQLSedveZ2byLzMiChlGAST7PXD9Hoxn_g3SgnZI_wUMs-XfAyLg/viewform?usp=dialog
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = RES501
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trialControl
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    CodeComponent code_control
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy import visual,event,core
        import os
      Begin Experiment:
        ### 1️⃣ BEGIN EXPERIMENT (Runs once at the start) ###
        import random

        # Global Variables
        image_index = 0  # Tracks current trial index
        selected_plan = None  # Stores participant's choice

        # Define image folders for each condition
        image_paths = {
            "Control": os.path.abspath("Control_SubPlans/") + "/",
            "20": os.path.abspath("20_SubPlans/") + "/",
            "30": os.path.abspath("30_SubPlans/") + "/",
            "Bundling": os.path.abspath ("Bundling_SubPlans/") + "/"
            }

        # Define number of plans for each image
        plan_counts = {
            "Hotstar": 3,
            "Zee5": 3,
            "Netflix": 4,
            "AppleOne": 2,
            "SonyLiv": 3,
            "Crunchyroll": 3
        }

        # Generate image lists for each condition
        images_control = [f"{name}Control.jpg" for name in plan_counts.keys()]
        images_20 = [f"{name}20.jpg" for name in plan_counts.keys()]
        images_30 = [f"{name}30.jpg" for name in plan_counts.keys()]
        images_bundling = [f"{name}Bundling.jpg" for name in plan_counts.keys()]

        # Shuffle images for random presentation
        random.shuffle(images_control)
        random.shuffle(images_20)
        random.shuffle(images_30)
        random.shuffle(images_bundling)
      Begin Routine:
        ### 2️⃣ BEGIN ROUTINE (Runs at the start of each trial) ###

        # Determine the block type (Control, 20% Discount, or 30% Discount)
        block_type = "Control"  # Modify dynamically based on block assignment

        # Set image list and path based on block type
        if block_type == "Control":
            image_list = images_control
            image_path = image_paths["Control"]
        elif block_type == "20":
            image_list = images_20
            image_path = image_paths["20"]
        else:
            image_list = images_30
            image_path = image_paths["30"]

        # Load the current image
        if image_index < len(image_list):
            image_file_control = image_list[image_index]
            current_image_control = image_path + image_file_control  # Full image path

            # Ensure the file exists
            if not os.path.exists(current_image_control):
                print(f"❌ ERROR: Missing image: {current_image_control}")
            else:
                print(f"✅ Displaying Image: {current_image_control}")

            # Get the number of plans for this image
            image_base_name = image_file_control.replace("Control.jpg", "").replace("20.jpg", "").replace("30.jpg", "")
            num_plans_control = plan_counts.get(image_base_name, 0)
        else:
            current_image_control = None
            num_plans_control = 0

        # Generate valid keys based on number of plans
        valid_keys_control = [str(i + 1) for i in range(num_plans_control)]
        valid_keys_str_control = valid_keys_control  # Store as list for PsychoPy keyboard component

        # Debugging output
        print(f"📝 Image: {image_file_control}, Plans Available: {num_plans_control}")
        print(f"🎯 Valid Keys: {valid_keys_str_control}")
      End Routine:
        ### 3️⃣ END ROUTINE (Runs after response is made) ###

        # Check if a key was pressed
        keys = key_resp_control.keys  # Ensure `key_resp` matches the Keyboard Component name

        if keys:
            selected_key_control = keys[0]  # Get the first key pressed
            selected_plan_control = f"Plan {selected_key_control}"
            print(f"✅ Selected: {selected_plan_control}")

            # End the routine when a valid key is pressed
            continueRoutine = False
        else:
            selected_plan_control = "None"  # No key was pressed
            print("❌ No selection made.")

        # Store response in PsychoPy's data file
        thisExp.addData("Image", image_file_control)
        thisExp.addData("Selected_Plan", selected_plan_control)

        # Move to the next image
        image_index += 1
        if image_index >= len(image_list):
            trialsControl.finished = True  # End the loop when all images are displayed
            image_index = 0 #Reset variable
            selected_plan = None #Reset variable

        # Debugging Output
        print(f"📜 Stored Plan: {selected_plan_control}")
        print(f"🔄 Moving to Image Index: {image_index}")
    ImageComponent image_control
      image [set every repeat] = $current_image_control
      size [set every repeat] = [1,0.8]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_control
      allowedKeys [set every repeat] = valid_keys_str_control
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine WelcomeScreen
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    TextComponent textWelcScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Welcome to our Experiment!
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    TextComponent textWelcMessage
      letterHeight = 0.05
      startVal [time (s)] = 2.1
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      text:
        You will be presented with several images that showcase subscription plans for various OTT platforms.

        Please select a plan based on your preference. To do so, hit the numbers 1, 2, 3 or 4 based on which plan you want to select, read from the left. (For e.g. the first plan from the left would be 1, second from the left would be 2 etc.)

        Press SPACE to start
    KeyboardComponent key_respStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine blank500
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    TextComponent textblank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine EndScreen
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    TextComponent textEndScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks for participating in the experiment! We greatly value your contribution to our study.

        Please contact the experimenter about your completion.
    KeyboardComponent key_respEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine trial20
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        ### BEGIN ROUTINE for 20% Discount ###
        block_type = "20"

        if block_type == "20":
            image_list_20 = images_20
            image_path_20 = image_paths["20"]

        if image_index < len(image_list_20):
            image_file_20 = image_list_20[image_index]
            current_image_20 = image_path_20 + image_file_20

            if not os.path.exists(current_image_20):
                print(f"❌ ERROR: Missing image: {current_image_20}")
            else:
                print(f"✅ Displaying Image: {current_image_20}")

            image_base_name = image_file_20.replace("20.jpg", "")
            num_plans_20 = plan_counts.get(image_base_name, 0)
        else:
            current_image_20 = None
            num_plans_20 = 0

        valid_keys_20 = [str(i + 1) for i in range(num_plans_20)]
        valid_keys_str_20 = valid_keys_20
      End Routine:
        ### END ROUTINE for 20% Discount ###
        keys_20 = key_resp_20.keys

        if keys_20:
            selected_key_20 = keys_20[0]
            selected_plan_20 = f"Plan {selected_key_20}"
            print(f"✅ Selected: {selected_plan_20}")

            continueRoutine = False
        else:
            selected_plan_20 = "None"
            print("❌ No selection made.")

        thisExp.addData("Image_20", image_file_20)
        thisExp.addData("Selected_Plan_20", selected_plan_20)

        image_index += 1
        if image_index >= len(image_list_20):
            trials20.finished = True
            image_index = 0 #Reset variable
            selected_plan = None #Reset variable

        print(f"📜 Stored Plan: {selected_plan_20}")
        print(f"🔄 Moving to Image Index: {image_index}")
    ImageComponent image_20
      image [set every repeat] = $current_image_20
      size [set every repeat] = [1,0.8]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_20
      allowedKeys [set every repeat] = valid_keys_str_20
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine trial30
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    CodeComponent code_30
      Code Type = Auto->JS
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      Begin Routine:
        ### BEGIN ROUTINE for 30% Discount ###
        block_type = "30"

        if block_type == "30":
            image_list_30 = images_30
            image_path_30 = image_paths["30"]

        if image_index < len(image_list_30):
            image_file_30 = image_list_30[image_index]
            current_image_30 = image_path_30 + image_file_30

            if not os.path.exists(current_image_30):
                print(f"❌ ERROR: Missing image: {current_image_30}")
            else:
                print(f"✅ Displaying Image: {current_image_30}")

            image_base_name = image_file_30.replace("30.jpg", "")
            num_plans_30 = plan_counts.get(image_base_name, 0)
        else:
            current_image_30 = None
            num_plans_30 = 0

        valid_keys_30 = [str(i + 1) for i in range(num_plans_30)]
        valid_keys_str_30 = valid_keys_30
      End Routine:
        ### END ROUTINE for 30% Discount ###
        keys_30 = key_resp_30.keys

        if keys_30:
            selected_key_30 = keys_30[0]
            selected_plan_30 = f"Plan {selected_key_30}"
            print(f"✅ Selected: {selected_plan_30}")

            continueRoutine = False
        else:
            selected_plan_30 = "None"
            print("❌ No selection made.")

        thisExp.addData("Image_30", image_file_30)
        thisExp.addData("Selected_Plan_30", selected_plan_30)

        image_index += 1
        if image_index >= len(image_list_30):
            trials30.finished = True
            image_index = 0 #Reset variable
            selected_plan = None #Reset variable

        print(f"📜 Stored Plan: {selected_plan_30}")
        print(f"🔄 Moving to Image Index: {image_index}")
    ImageComponent image_30
      image [set every repeat] = $current_image_30
      size [set every repeat] = [1,0.8]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_30
      allowedKeys [set every repeat] = valid_keys_str_30
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine trialBundling
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    CodeComponent code_bundling
      Code Type = Auto->JS
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      Begin Routine:
        ### BEGIN ROUTINE for Bundling ###
        block_type = "Bundling"

        if block_type == "Bundling":
            image_list_bundling = images_bundling
            image_path_bundling = image_paths["Bundling"]

        if image_index < len(image_list_bundling):
            image_file_bundling = image_list_bundling[image_index]
            current_image_bundling = image_path_bundling + image_file_bundling

            if not os.path.exists(current_image_bundling):
                print(f"❌ ERROR: Missing image: {current_image_bundling}")
            else:
                print(f"✅ Displaying Image: {current_image_bundling}")

            image_base_name = image_file_bundling.replace("Bundling.jpg", "")
            num_plans_bundling = plan_counts.get(image_base_name, 0)
        else:
            current_image_bundling = None
            num_plans_bundling = 0

        valid_keys_bundling = [str(i + 1) for i in range(num_plans_bundling)]
        valid_keys_str_bundling = valid_keys_bundling
      End Routine:
        ### END ROUTINE for Bundling ###
        if key_resp_bundling.keys:  # ✅ Corrected Variable Name
            keys_bundling = key_resp_bundling.keys  # ✅ Assign response keys correctly
            selected_key_bundling = keys_bundling[0]  # Get first key press
            selected_plan_bundling = f"Plan {selected_key_bundling}"
            print(f"✅ Selected: {selected_plan_bundling}")

            continueRoutine = False  # Ensure routine ends immediately
        else:
            selected_plan_bundling = "None"
            print("❌ No selection made.")

        thisExp.addData("Image_Bundling", image_file_bundling)
        thisExp.addData("Selected_Plan_Bundling", selected_plan_bundling)

        # ✅ Ensure routine ends before incrementing image_index
        if not continueRoutine:
            image_index += 1

            # ✅ Ensure loop stops after the last image
            if image_index >= len(image_list_bundling):
                print("✅ All Bundling trials completed! Ending experiment.")
                trialsBundling.finished = True  # ✅ Ensures loop stops only once

        print(f"📜 Stored Plan: {selected_plan_bundling}")
        print(f"🔄 Moving to Image Index: {image_index}")
    ImageComponent image_bundling
      image [set every repeat] = $current_image_bundling
      size [set every repeat] = [1,0.85]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_bundling
      allowedKeys [set every repeat] = valid_keys_str_bundling
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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Flow
  Routine WelcomeScreen
  LoopInitiator trialsControl loopType="TrialHandler"
    loopType = random
    nReps = 6
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    conditions:
      [{'image_file': 'Control_SubPlans/Hotstar.jpg', 'plan_a_x1': 321, 'plan_a_y1': 239, 'plan_a_x2': 442, 'plan_a_y2': 943, 'plan_b_x1': 452, 'plan_b_y1': 251, 'plan_b_x2': 579, 'plan_b_y2': 942, 'plan_c_x1': 566, 'plan_c_y1': 246, 'plan_c_x2': 717, 'plan_c_y2': 943, 'plan_d_x1': None, 'plan_d_y1': None, 'plan_d_x2': None, 'plan_d_y2': None},
      {'image_file': 'Control_SubPlans/Zee5.jpg', 'plan_a_x1': 72, 'plan_a_y1': 489, 'plan_a_x2': 409, 'plan_a_y2': 807, 'plan_b_x1': 430, 'plan_b_y1': 531, 'plan_b_x2': 765, 'plan_b_y2': 802, 'plan_c_x1': 787, 'plan_c_y1': 531, 'plan_c_x2': 1122, 'plan_c_y2': 805, 'plan_d_x1': None, 'plan_d_y1': None, 'plan_d_x2': None, 'plan_d_y2': None},
      {'image_file': 'Control_SubPlans/Netflix.jpg', 'plan_a_x1': 14, 'plan_a_y1': 153, 'plan_a_x2': 416, 'plan_a_y2': 1147, 'plan_b_x1': 443, 'plan_b_y1': 144, 'plan_b_x2': 853, 'plan_b_y2': 1145, 'plan_c_x1': 886, 'plan_c_y1': 154, 'plan_c_x2': 1287, 'plan_c_y2': 1147, 'plan_d_x1': 1321, 'plan_d_y1': 153, 'plan_d_x2': 1723, 'plan_d_y2': 1145},
      {'image_file': 'Control_SubPlans/AppleOne.jpg', 'plan_a_x1': 51, 'plan_a_y1': 45, 'plan_a_x2': 653, 'plan_a_y2': 1101, 'plan_b_x1': 714, 'plan_b_y1': 41, 'plan_b_x2': 1315, 'plan_b_y2': 1101, 'plan_c_x1': None, 'plan_c_y1': None, 'plan_c_x2': None, 'plan_c_y2': None, 'plan_d_x1': None, 'plan_d_y1': None, 'plan_d_x2': None, 'plan_d_y2': None}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
    Routine trialControl
    Routine blank500
  LoopTerminator trialsControl
  Routine blank500
  LoopInitiator trials20 loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine trial20
    Routine blank500
  LoopTerminator trials20
  Routine blank500
  LoopInitiator trials30 loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine trial30
    Routine blank500
  LoopTerminator trials30
  Routine blank500
  LoopInitiator trialsBundling loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine trialBundling
    Routine blank500
  LoopTerminator trialsBundling
  Routine blank500
  Routine EndScreen
